PsychoPy2experiment version="1.83.04"
Settings
  Monitor = testMonitor
  color = $[-1.000,-1.000,-1.000]
  Experiment info = {u'n_square': u'64', u'opacity': u'1', u'lowest_opacity': u'0.1', u'probeFrames': u'4', u'participant': u'test', u'premask': u'4', u'session': u'1', u'image_size': u'300', u'postmask': u'4'}
  Units = use prefs
  Screen = 1
  Window size (pixels) = [1024, 768]
  Save csv file = True
  Data filename = 'data/%s/%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  expName = experiment
  Full-screen window = True
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Routines
  Routine premask
    GratingComponent premasking
      tex = $pepe
      stopVal [duration (frames)] = $premask_dur
      pos = [0, -0]
      units = pix
      texture resolution = 256
      startVal [time (s)] = 0.0
      sf = None
      size = $(image_size/1.5, image_size/1.5)
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  Routine discriminate
    CodeComponent get_response
      Begin Routine:
        main_loop.addData("discrim_resptime", globalClock.getTime() - startTime)
        resp_options = [['nV_V',['Nonliving_Things','Living_Things']],
                        ['V_nV',['Living_Things','Nonliving_Things']]]
        idx = np.random.choice([0,1])
        resp_msg = '{}'.format(resp_options[idx][0])
        main_loop.addData("response_window", resp_options[idx][0])
      End Routine:
        temp_correctAns = np.where(np.array(resp_options[idx][1]) == category)[0][0]+1
        main_loop.addData('correctAns',temp_correctAns)
        # objective accuracy
        if (response.keys == str(temp_correctAns)) or (response.keys == temp_correctAns):
           temp_corr = 1
        else:
            temp_corr = 0
        main_loop.addData('response.corr' , temp_corr)
    TextComponent response_options
      text [set every repeat] = $resp_msg
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent response
      stopVal [duration (s)] = 1.5
      forceEndRoutine = False
      allowedKeys = '1','2'
      startVal [time (s)] = 0.0
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  Routine fixation
    TextComponent fixation_cross
      text = +
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent blank_period
      stopVal [duration (s)] = $blank_dur
      startVal [condition] = $fixation_cross.status == FINISHED
      letterHeight = 0.1
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    CodeComponent code
      Begin Routine:
        main_loop.addData("fixation_onset", globalClock.getTime() - startTime)
        main_loop.addData("blank_dur",blank_dur)
  Routine visibility
    CodeComponent trigger_visibility
      Begin Routine:
        main_loop.addData("visible_resptime", globalClock.getTime() - startTime)
      End Routine:
        count += 1
        main_loop.addData('opacity',opacity)

        #if (visible.keys == str('1')) or (visible.keys == '1'):# invisible
        #    opacity += np.random.choice([0.1, 0.2, 0.3],size = 1)[0]
        #    if opacity > 1: opacity = 1
        #    #curr += np.random.choice([1,2,3],size=1)[0]
        #    #if curr < 1:  curr = 1
        #elif (visible.keys == str('2')) or (visible.keys == '2'):# partially aware
        #    opacity -= 0.1
        #    if opacity < lowest_opacity: opacity = lowest_opacity
        #    #curr -= 1
        #    #if curr < 1:  curr = 1
        #elif (visible.keys == str('3')) or (visible.keys == '3'): # visible
        #    opacity -= np.random.choice([0.1, 0.2, 0.3],size = 1)[0]
        #    if opacity < lowest_opacity: opacity = lowest_opacity
        #    #curr -= np.random.choice([2,3],size=1,p=[0.5,0.5])[0]
        #    #if curr < 1: curr = 1

        temp_corr
        if ((visible.keys == str('1')) or (visible.keys == '1')) and (temp_corr == 0): #invisible and incorrect
            opacity += 0.2
        elif ((visible.keys == str('1')) or (visible.keys == '1')) and (temp_corr == 1): #invisible and correct
            opacity += 0.1
        elif ((visible.keys == str('2')) or (visible.keys == '2')) and (temp_corr == 0): #visible and incorrect
            opacity -= 0.1
        elif ((visible.keys == str('2')) or (visible.keys == '2')) and (temp_corr == 1): #visible and correct
            opacity -= 0.2
    TextComponent visibility_message
      text = ?
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent visible
      correctAns = '1'
      storeCorrect = True
      stopVal [duration (s)] = 1.5
      forceEndRoutine = False
      allowedKeys = '1','2'
      startVal [time (s)] = 0.0
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  Routine jitter1
    TextComponent jitter_delay
      text = +
      stopVal [duration (s)] = $jitter1_dur
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent log_jitter_delay
      Begin Routine:
        jitter1_dur = jitter1_dur_options[jitter_counter]
        main_loop.addData('jitter1',jitter1_dur)
  Routine trial
    CodeComponent importing
      Code Type = Py
      Begin Experiment:
        import sys
        reload(sys)
        sys.setdefaultencoding("latin-1")
      Begin Routine:
        main_loop.addData("image_onset_time", globalClock.getTime() - startTime)
    ImageComponent presentation
      image [set every repeat] = $PATH
      startVal [time (s)] = 0.0
      units = pix
      size = $(image_size, image_size)
      opacity [set every repeat] = $opacity
      stopVal [duration (frames)] = $curr
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  Routine intro
    CodeComponent settingThingsUp
      Begin Experiment:
        globalClock = core.Clock()

        premask_dur = int(expInfo['premask'])
        postmask_dur = int(expInfo['postmask'])
        n_square = int(expInfo['n_square'])
        image_size = int(expInfo['image_size'])
        opacity = float(expInfo['opacity'])
        session = int(expInfo['session'])

        curr = int(expInfo['probeFrames'])
        lowest_opacity = float(expInfo['lowest_opacity'])
        count = 0

        import time
        from psychopy import parallel
        parallel.setPortAddress(888)
        wait_msg = "Wating for Scanner ..."
        msg = visual.TextStim(win,color = 'DarkGray',text = wait_msg)

        # jitter 1
        jitter_counter = 0
        jitter1_dur_options = np.concatenate([[1.5]*16,[2.0]*8,[2.5]*6,[3.0]*4,[3.5]*4])
        np.random.shuffle(jitter1_dur_options)

        # jitter 2
        jitter2_dur_options = np.concatenate([[6.0]*16,[6.5]*8,[7.0]*6,[7.5]*4,[8.0]*4])
        np.random.shuffle(jitter2_dur_options)

        np.random.seed(12345)
        pepe = np.random.rand(n_square,n_square)*2 - 1
      Begin Routine:
        msg.draw()
        win.flip()

        while True:
            if (event.getKeys() == ['q']):#(parallel.readPin(10) == 1) or
                break
            else:
                time.sleep(0.0001) # give 1ms to other processes
        globalClock.reset()
        startTime = globalClock.getTime()
  Routine end_experiment
    CodeComponent theEnd
      End Experiment:
        print(globalClock.getTime() - startTime)
        print("mean unconscious = {:.2f}, frame = {}, p(correct) = {:.2f}".format(
            meanvis,curr,meanacc))
  Routine intoPrepare
    TextComponent preparation
      stopVal [duration (s)] = .3
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent first_blank
      stopVal [duration (s)] = .1
      startVal [time (s)] = .3
      letterHeight = 0.1
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  Routine jitter2
    CodeComponent code_2
      Begin Routine:
        jitter2_delay_dur = jitter2_dur_options[jitter_counter]
        main_loop.addData('jitter2',jitter2_delay_dur)
        jitter_counter += 1
      End Routine:
        meanacc = main_loop.data['response.corr'].mean()
        meanvis = main_loop.data['visible.corr'].mean()

        print('{}/{}, mean unconscious = {:.2f},opacity = {},p(correct) = {:.2f}'.format(
                main_loop.thisN,main_loop.nTotal,
                meanvis,opacity,meanacc))
    TextComponent post_jitter
      text = +
      stopVal [duration (s)] = 1
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine postmask
    GratingComponent postmasking
      tex = $pepe
      stopVal [duration (frames)] = postmask_dur
      units = pix
      texture resolution = 256
      startVal [time (s)] = 0.0
      sf = None
      size = $(image_size/1.5, image_size/1.5)
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Flow
  Routine intro
  Routine intoPrepare
  LoopInitiator main_loop loopType="TrialHandler"
    conditionsFile = ..\experiment_csvs\session_1.csv
    loopType = random
    nReps = 1
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    conditions:
      [{'Category': 'animal', 'Mean_Familiarity': 4.36, 'SD_Concreteness': 1.5524174696260014, 'Word': 'Gaviota', 'picked': True, 'Mean_Arousal': 5.026315789473684, 'Mean_Valence': 5.0, 'SD_Familiarity': 2.325224003546038, 'Length': 7, 'Frequency': 2.5, 'blank_dur': 0.6335324363714059, 'English': 'Seagull', 'log_frequency': 0.9162907318741552, 'PATH': '../stimuli_figure/Seagull.jpeg', 'category': 'Living_Things', 'SD_Arousal': 1.9240559932469117, 'SD_Valence': 1.9864405216230223, 'Mean_Concreteness': 7.92},
      {'Category': 'animal', 'Mean_Familiarity': 4.24, 'SD_Concreteness': 2.6223399220289245, 'Word': 'Almeja', 'picked': True, 'Mean_Arousal': 3.4210526315789487, 'Mean_Valence': 4.921052631578949, 'SD_Familiarity': 2.3853720883753127, 'Length': 6, 'Frequency': 0.54, 'blank_dur': 0.35022490885271323, 'English': 'Clam', 'log_frequency': -0.6161861394238171, 'PATH': '../stimuli_figure/Clam.jpeg', 'category': 'Living_Things', 'SD_Arousal': 1.7496189383941527, 'SD_Valence': 1.6986732334124204, 'Mean_Concreteness': 6.72},
      {'Category': 'animal', 'Mean_Familiarity': 4.72, 'SD_Concreteness': 1.468559384794046, 'Word': 'Oso', 'picked': True, 'Mean_Arousal': 5.2368421052631575, 'Mean_Valence': 5.605263157894738, 'SD_Familiarity': 2.685144316419509, 'Length': 3, 'Frequency': 11.43, 'blank_dur': 0.4893778749568593, 'English': 'Bear', 'log_frequency': 2.4362414778067194, 'PATH': '../stimuli_figure/Bear.jpeg', 'category': 'Living_Things', 'SD_Arousal': 2.07213443326696, 'SD_Valence': 1.7939760112321024, 'Mean_Concreteness': 7.64},
      {'Category': 'object', 'Mean_Familiarity': 3.6, 'SD_Concreteness': 1.3228756555322954, 'Word': 'Misil', 'picked': True, 'Mean_Arousal': 6.789473684210527, 'Mean_Valence': 1.5526315789473684, 'SD_Familiarity': 2.3804761428476167, 'Length': 5, 'Frequency': 5.0, 'blank_dur': 0.4136258849875571, 'English': 'Missile', 'log_frequency': 1.6094379124341005, 'PATH': '../stimuli_figure/Missile.jpeg', 'category': 'Nonliving_Things', 'SD_Arousal': 1.9885876386486108, 'SD_Valence': 0.7240041966823505, 'Mean_Concreteness': 7.8}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
    Routine fixation
    Routine premask
    Routine trial
    Routine postmask
    Routine jitter1
    Routine discriminate
    Routine visibility
    Routine jitter2
  LoopTerminator main_loop
  Routine end_experiment
